macro "Batch Processor 9001 Action Tool - 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"{
function processImage(input, output, filename) {
	IJ.redirectErrorMessages();
	open(input + filename);
	run("RGB Color");
	run("Brightness/Contrast...");
	run("Enhance Contrast", "saturated=0.35");

	run("Close");
	run("Unsharp Mask...", "radius=1 mask=0.60");
	modFilename = filename + "_Batch_Processor_9001";
	saveAs("Tiff", output + modFilename);
	close();
	
};

input = getDirectory("Choose Input directory");
output = getDirectory("Choose Output directory");


setBatchMode(true); 
imageList = getFileList(input);
for (i = 0; i<imageList.length; i++)
	processImage(input, output, imageList[i]);
setBatchMode(false);
};
